CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20130401200712

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:Yes
    Exclude certain files?:No
    Specify metadata fields to group by:site
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    Image count:2
    Text that these images have in common (case-sensitive):c1
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:20130405 a20_22 sirna dcf tnf001xy(?P<site>[0-9][0-9][0-9])c1t(?P<tp>[0-9][0-9])
    Type the regular expression that finds metadata in the subfolder path:.*[\\\\\\\\/](?P<well>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:img_nc
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):c2
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:20130405 a20_22 sirna dcf tnf001xy(?P<site>[0-9][0-9][0-9])c2t(?P<tp>[0-9][0-9])
    Type the regular expression that finds metadata in the subfolder path:.*[\\\\\\\\/](?P<well>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:img_er
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    Rescale intensities?:Yes

WMC_Segment:[module_num:2|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
    Input image name::img_nc
    Output image name::img_nc_mask
    Gaussian Filter Size:2
    Rolling Ball Size:12
    Parabolic Kernel:No
    Noise:10
    Low Seed:10
    High Seed:50
    Low Bound:0.5
    High Bound:0.6
    Intensity Equalize:No

Binary_Watershed:[module_num:3|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
    Input image name::img_nc_mask
    Output image name::img_nc_mask_cut

IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:img_nc_mask_cut
    Name the primary objects to be identified:obj_nc
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Yes
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    Manual threshold:0.1
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
TrackObjects:[module_num:5|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
    Choose a tracking method:Distance
    Select the objects to track:obj_nc
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Do you want to filter objects by lifetime?:No
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100

SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:img_nc_mask_cut
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    Select method for constructing file names:From image filename
    Select image name for file prefix:img_nc
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_nc_mask
    Select file format to use:tif
    Output file location:Default Output Folder sub-folder|obj_nc
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

Cyto_NC_Segment:[module_num:7|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
    NC_mask image name::img_nc_mask_cut
    NC_gray image name::img_nc
    Cyto_gray image name::img_er
    Output image name::cyto_mask
    Gaussian Filter Size:2
    Rolling Ball Size:16
    Noise:5
    Low Seed:10
    High Seed:50
    Dilate Distance:0

IdentifyPrimaryObjects:[module_num:8|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notes:['get cyto object']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
    Select the input image:cyto_mask
    Name the primary objects to be identified:obj_cyto
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Manual threshold:0.1
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
SaveImages:[module_num:9|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notes:['save cyto objects']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
    Select the type of image to save:Image
    Select the image to save:cyto_mask
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    Select method for constructing file names:From image filename
    Select image name for file prefix:img_er
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_cyto_mask
    Select file format to use:tif
    Output file location:Default Output Folder sub-folder|obj_cyto
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:obj_cyto
    Select the smaller identified objects:obj_nc
    Name the tertiary objects to be identified:obj_cyto_only
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    Retain outlines of the tertiary objects?:No

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:obj_cyto
    Select objects to measure:obj_nc
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:img_er
    Select objects to measure:obj_cyto_only

MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:img_nc
    Select objects to measure:obj_nc

RelateObjects:[module_num:14|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
    Select the input child objects:obj_nc
    Select the input parent objects:obj_cyto
    Calculate distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:15|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
    Select the input child objects:obj_nc
    Select the input parent objects:obj_cyto_only
    Calculate distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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